PsychoPy2experiment version="2026.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = untitled
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine Instructions
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    TextComponent instructions
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = In this task you will be required to press space if the white square appeared in the same location as the location on the last trial. For example if the square was in the left down corner on trial 1 and then it appeared in the same location on trial 2, press space. Otherwise, do not respond. Press space to continue.
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Fixation
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    TextComponent fixation_1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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  Routine End
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    TextComponent thank_you
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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      text:
        This is the end of the experiment.
        Thank you for your time.
  Routine N_back_1_Trial
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    ImageComponent grid_lines
      image = grid
      size = (0.6, 0.6)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2
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    PolygonComponent target_square
      fillColor = $[1.000,1.000,1.000]
      pos [set every repeat] = $location
      shape = rectangle
      size = (0.15, 0.15)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
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    TextComponent fixation_2
      letterHeight = 0.05
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1.0
      text = +
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    KeyboardComponent response
      allowedKeys = 'space'
      correctAns = $corrAns
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      storeCorrect = True
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  Routine Instructions_2
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    TextComponent instructions_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        In this 2‑back task, you will see a series of squares appear one at a time on the screen. Your job is to press the match key whenever the current square is the same as the one shown two squares earlier, and do nothing otherwise. Respond as quickly and accurately as you can throughout the sequence.

        For example if the square appeared in left down corner on trial 1, you should press space if the square appears in the left down corner on trial 3. Press space to continue.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine N_back_2_trials
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    ImageComponent grid_lines_2
      image = grid
      size = (0.6, 0.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    PolygonComponent target_square_2
      fillColor = $[1.000,1.000,1.000]
      pos [set every repeat] = $location
      shape = rectangle
      size = (0.15, 0.15)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.0
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    TextComponent fixation_3
      letterHeight = 0.05
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1
      text = +
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    KeyboardComponent response_2
      allowedKeys = 'space'
      correctAns = $corrAns
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      storeCorrect = True
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Experiment:
        from pylsl import StreamInfo, StreamOutlet, StreamInlet, resolve_byprop

        # ---- PsychoPy → LIFU ----
        info = StreamInfo('PsychoPyMarkers', 'Markers', 1, 0, 'string')
        outlet = StreamOutlet(info)

        # ---- LIFU → PsychoPy ----
        streams = resolve_byprop('name', 'LIFUEvents', timeout=30)
        lifu_inlet = StreamInlet(streams[0])

        last_lifu_event = ""
      Each Frame:
        sample = lifu_inlet.pull_sample(timeout=0.0)
        if sample:
            last_lifu_event = sample[0]
      End Routine:
        # Send marker to LIFU if participant was wrong
        if response_2.corr == 0:   # <-- change to your actual response component
            outlet.push_sample(["INCORRECT"])
            sonication_duration = 5
        else:
            sonication_duration = 0

        # Log LIFU event received during this trial
        thisExp.addData('LIFU_event', last_lifu_event)
        thisExp.addData('sonication_duration', sonication_duration)

        # Reset for next trial
        last_lifu_event = ""
Flow
  Routine Instructions_2
  Routine Fixation
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = N-back-2.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'location': [0, 0], 'corrAns': None},
      {'location': [0, 0.2], 'corrAns': None},
      {'location': [0.2, 0], 'corrAns': None},
      {'location': [0.2, -0.2], 'corrAns': None},
      {'location': [0.2, 0.2], 'corrAns': None},
      {'location': [0.2, -0.2], 'corrAns': 'space'},
      {'location': [-0.2, -0.2], 'corrAns': None},
      {'location': [-0.2, 0.2], 'corrAns': None},
      {'location': [0, 0], 'corrAns': None},
      {'location': [-0.2, -0.2], 'corrAns': None},
      {'location': [0, 0], 'corrAns': 'space'},
      {'location': [0.2, 0], 'corrAns': None},
      {'location': [0.2, 0.2], 'corrAns': None},
      {'location': [0.2, 0], 'corrAns': 'space'},
      {'location': [0, -0.2], 'corrAns': None},
      {'location': [0.2, -0.2], 'corrAns': None},
      {'location': [0.2, -0.2], 'corrAns': None},
      {'location': [-0.2, 0.2], 'corrAns': None},
      {'location': [0.2, 0.2], 'corrAns': None},
      {'location': [0, 0], 'corrAns': None},
      {'location': [0.2, 0.2], 'corrAns': 'space'},
      {'location': [-0.2, 0], 'corrAns': None},
      {'location': [-0.2, -0.2], 'corrAns': None},
      {'location': [-0.2, 0], 'corrAns': 'space'},
      {'location': [-0.2, 0], 'corrAns': None},
      {'location': [0, 0], 'corrAns': None},
      {'location': [0, 0.2], 'corrAns': None},
      {'location': [0.2, 0], 'corrAns': None},
      {'location': [-0.2, -0.2], 'corrAns': None},
      {'location': [0.2, 0], 'corrAns': 'space'}]
    Routine N_back_2_trials
  LoopTerminator trials_2
  Routine End
